OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:8" => #1
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = -1
  High cut frequency (Hz) = 50
  Pass band ripple (dB) = 0.5
#0.Stimulations -> P300 Speller Stimulator
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 5
  Number of trials = 5
  Flash duration (in sec) = 0.075
  No flash duration (in sec) = 0.125
  Inter-repetition delay (in sec) = 2
  Inter-trial delay (in sec) = 5
  Avoid neighbor flashing = false

P300 Magic Card Visualisation
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card.ui
  Background color = 90,90,90
  Target background color = 10,40,10
  Selected background color = 70,20,20
  Card stimulation base = OVTK_StimulationId_Label_01
  Default background filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/openvibe-logo.png-offscreen
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/01.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/02.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/03.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/04.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/05.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/06.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/08.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/09.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/10.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/11.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/12.png

Python scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/Sydney/Desktop/Programming/Neurotech/openvibe-python-tutorial-master/openvibe-python-tutorial-master/scripts/n400.py

Lua Stimulator
  Lua Script =

Keyboard stimulator
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt

0xc67a01dc Display cue image
  Display images in full screen = false
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/01.png
  Stimulation 1 = OVTK_StimulationId_Label_01

Clock
  Clock frequency (Hz) = 60
  Log level to use = Information

Clock stimulator
  Interstimulation interval (in sec) = 1.0
  Stimulation = OVTK_StimulationId_Label_00

Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_VEP
