PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = TestEXP
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent Stim
      text [set every repeat] = $Word
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.1
      letterHeight = 0.5
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  Routine isi
    TextComponent Fixation_Cross
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine Password_Collect
    TextComponent Instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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      text:
        Please
        Enter Password
    KeyboardComponent StartEXP
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Password_Collect
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions.csv
    loopType = random
    nReps = 5
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    conditions:
      [{'Word': u'Password_1'},
      {'Word': u'Password_2'},
      {'Word': u'Password_3'},
      {'Word': u'Password_4'}]
    Routine trial
    Routine isi
  LoopTerminator trials
